PsychoPy2experiment version="1.74.00"
Settings
  Save csv file = True
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Save log file = False
  Save wide csv file = False
  expName = stroop_peer
  logging level = warning
  Units = norm
  Show info dlg = False
  Saved data folder = /home/mati/temp
  Screen = 1
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Routines
  Routine block_break
    TextComponent text_2
      text = Remember - pay attention to colours!!!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
      Begin Routine:
        if not block_changed:
            continue
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      startVal [time (s)] = 1.0
      letterHeight = 0.2
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    CodeComponent code
      Begin Experiment:
        try:
            from exps import exps_helper
            from exps.dorota2 import dorota_helper
            import time
            H = exps_helper.ExpsHelper()
        except Exception, e:
            print("No obci mode?: "+str(e))

        CONDITIONS = ['con', 'exp']
        CONDITIONS_COUNT = len(CONDITIONS)
        BLOCKS_COUNT = 2
        TRIALS_COUNT = 4
        KEYS_MAP = {'green':'7', 'red':'8', 'yellow':'9', 'blue':'0'}
        CONDITIONS_FILE='/home/mati/obci/exps/dorota2/trialTypesCongruent.csv'

        condition_index = 0
        block_index = 0
        trial_index = 0


        dorota_helper.generate_trials(CONDITIONS_FILE, CONDITIONS, BLOCKS_COUNT, TRIALS_COUNT, KEYS_MAP)
      Begin Routine:
        try:
            ts = time.time() - trialClock.getTime()
            H.send_tag(time.time(), time.time(), "trial")
        except Exception, e:
            print("No obci mode?: "+str(e))
      End Routine:
        try:
            ts = ts +word.tStart
            H.send_tag(ts, time.time(), "word",
            {'keys':str(resp.keys),
            'corr':str(resp.corr),
            'rt':str(resp.rt),
            'text':str(text),
           'color':str(letterColor),
           'condition':str(CONDITIONS[condition_index]),
           'block_index':str(block_index),
           'trial_index':str(trial_index),
            })
        except Exception, e:
            print("No obci mode?: "+str(e))

        block_changed = False
        condition_changed = False
        trial_index += 1
        if trial_index % TRIALS_COUNT == 0:
            block_index += 1
            block_changed = True
            if block_index % BLOCKS_COUNT == 0:
                condition_index += 1
                condition_changed = True
        print("trials: "+str(trial_index)+" blocks: "+str(block_index)+ "conds: "+str(condition_index))
        print("Block changed: "+str(block_changed))
        print("cond changed: "+str(condition_changed))
      End Experiment:
        try:
            H.finish_saving()
        except Exception, e:
            print("No obci mode?: "+str(e))
    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "7", "8", "9", "0"
      startVal [time (s)] = 1.0
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    TextComponent fixation
      text = +
      stopVal [duration (s)] = 0.7
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine condition_break
    TextComponent text_3
      text = Get some rest.. Hit space to continue
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Begin Routine:
        if not condition_changed:
            continue
  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.3
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /home/mati/obci/exps/dorota2/trialTypesCongruent.csv
    loopType = sequential
    nReps = 1
    endPoints = [1, 2]
    conditions:
      [{'text': u'red', 'congruent': 1, 'corrAns': 7, 'letterColor': u'red'},
      {'text': u'green', 'congruent': 1, 'corrAns': 8, 'letterColor': u'green'},
      {'text': u'blue', 'congruent': 1, 'corrAns': 9, 'letterColor': u'blue'},
      {'text': u'yellow', 'congruent': 1, 'corrAns': 0, 'letterColor': u'yellow'},
      {'text': u'red', 'congruent': 1, 'corrAns': 7, 'letterColor': u'red'},
      {'text': u'green', 'congruent': 1, 'corrAns': 8, 'letterColor': u'green'},
      {'text': u'blue', 'congruent': 1, 'corrAns': 9, 'letterColor': u'blue'},
      {'text': u'yellow', 'congruent': 1, 'corrAns': 0, 'letterColor': u'yellow'},
      {'text': u'red', 'congruent': 1, 'corrAns': 7, 'letterColor': u'red'},
      {'text': u'green', 'congruent': 1, 'corrAns': 8, 'letterColor': u'green'},
      {'text': u'blue', 'congruent': 1, 'corrAns': 9, 'letterColor': u'blue'},
      {'text': u'yellow', 'congruent': 1, 'corrAns': 0, 'letterColor': u'yellow'}]
    Routine trial
    Routine block_break
    Routine condition_break
  LoopTerminator trials
  Routine thanks
